PsychoPy2experiment version="1.90.2"
Settings
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  expName = ambiguity_task
  Screen = 1
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Routines
  Routine b'example_2'
    ImageComponent example_1
      stopVal [time (s)] = 22
      startVal [time (s)] = 0
      image = risky_red_p13_urns.jpg
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    TextComponent instruct_ex
      stopVal [duration (s)] = 5.0
      startVal [time (s)] = 22
      letterHeight = 0.05
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      text:
        If you have chosen '1' you played the 50% 5 NOK lottery
        If you have chosen '2' you played the 13% 18 NOK lottery
    TextComponent text_2
      stopVal [duration (s)] = 22
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        1 = 50/50 lottery
        2 = lottery on screen
    KeyboardComponent key_resp_ex
      stopVal [duration (s)] = 22
      forceEndRoutine = True
      allowedKeys = '1','2'
      startVal [time (s)] = 0
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    TextComponent text_3
      text = 0
      stopVal [duration (s)] = 22
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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    TextComponent text_4
      text = 18
      stopVal [duration (s)] = 22
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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  Routine break2
    TextComponent breakt
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Take a break if you wish.

        Press SPACE when you are ready to continue.
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine urns
    ImageComponent image
      stopVal [duration (s)] = 10
      startVal [time (s)] = 0
      image [set every repeat] = $urn_selection
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    TextComponent instruct_reminder
      stopVal [duration (s)] = 22
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        1 = 50/50 lottery
        2 = lottery on screen
    TextComponent value
      color [set every repeat] = white
      text [set every repeat] = $reward1
      stopVal [duration (s)] = 10
      pos [set every repeat] = $(Pos1X, Pos1Y)
      startVal [time (s)] = 0
      font [set every repeat] = Arial
      letterHeight [set every repeat] = .05
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    TextComponent value_2
      color [set every repeat] = white
      text [set every repeat] = $reward2
      stopVal [duration (s)] = 10
      pos [set every repeat] = $(Pos2X, Pos2Y)
      startVal [time (s)] = 0.0
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.05
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    KeyboardComponent key_resp_2
      stopVal [duration (s)] = 10
      forceEndRoutine = True
      allowedKeys [set every repeat] = '1', '2'
      startVal [time (s)] = 0
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  Routine intro2
    TextComponent instructions
      startVal [time (s)] = 0
      letterHeight = .05
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      text:
        In this task, you will have to choose to play one of two lotteries. If you choose to play the first lottery (option 1), you will always have a 50% chance of winning 5 kr. If you choose to play the second lottery (option 2), the probability of winning will change, as will the amount of money you can win.

        On each trial, you will see a bar that is partly red and partly blue. This bar represents a lottery jar filled with red and blue beads. The ratio of red to blue indicates the proportions of red and blue beads in the jar. You will also see two numbers next to the red and blue portions of the bar: one of them will be 0, the other a non-zero integer. These numbers indicate the potential winnings for beads of each colour.

        On some trials, the grey line dividing red and blue in the jar will be thicker, hiding the exact proportions of red and blue. This does not affect the way the task works – you should still choose whether you want to play option 1 or option 2.

        It is important to note that you will not be presented with a visual representation of option 1. This is because both the probability of winning and the amount that can be won are constant for this option.

        You can choose which lottery you want to play by pressing 1 for option 1 or 2 for option 2.
        By performing well in this task, you can increase your overall reward by up to 30 kr.

        When you are ready to continue, press SPACE.
        You will then complete a trial run.
    KeyboardComponent key_resp_5
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine get_ready_main
    TextComponent text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You are about to start the main task.

        On three unknown trials you have the chance of winning actual money that will be added to your participation reward.

        Press SPACE when you are ready to continue.

        Good luck!
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine intro2
  Routine example_2
  Routine get_ready_main
  LoopInitiator urntrials loopType="TrialHandler"
    conditionsFile = urn_trials.xlsx
    loopType = random
    nReps = 1
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    Routine urns
  LoopTerminator urntrials
  Routine break2
  LoopInitiator urntrials2 loopType="TrialHandler"
    conditionsFile = urn_trials.xlsx
    loopType = random
    nReps = 1
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    Routine urns
  LoopTerminator urntrials2
