PsychoPy2experiment version="1.90.2"
Settings
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Save csv file = True
  expName = onejar_beads_norm_NO
  Screen = 1
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Routines
  Routine end_of_task
    TextComponent text_2
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Takk skal du ha!
        Oppgaven er nå over.
  Routine next
    TextComponent text_3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Gjør deg klar!
        Trykk SPACE for å fortsette
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine trial
    TextComponent instructions
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Du vil få presentert en krukke med blå og gule kuler med en gitt fordeling mellom fargene.
        Fordelingen vises på skjermen under hver ny oppgave.
        Du får også se en rekke med kuler som trekkes fra krukken, og din oppgave er å finne ut hvilken farge flertallet av kulene i krukken er.

        For eksempel, hvis fordelingen er 85:15, så skal du finne ut om 85 % av kulene er blå eller gul.

        Du kan be om å få se så mange kuler som du vil.
        For å be om nok en kule, trykk på SPACE-knappen.
        Når du føler du har nok informasjon, da kan du velge ved å trykke på den gule tasten for gul eller den blå tasten for blå.

        Fordi fordelingene skifter mellom oppgavene, er det viktig at du leser all informasjonen på skjermen.

        For å starte, trykk SPACE.

        Lykke til!
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine trial_4
    ImageComponent current_bead_3
      stopVal [duration (s)] = 120
      startVal [time (s)] = 0.0
      image [set every repeat] = $SequenceName
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    TextComponent option_3
      stopVal [duration (s)] = 120
      pos = (0,0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Trykk blå tast for 60% blå
        Trykk gul tast for 60% gul
        Trykk SPACE for å se enda en kule
    ImageComponent image_3
      stopVal [duration (s)] = 120
      pos = (-0.8, 0.6)
      startVal [time (s)] = 0.0
      image = one_jar.jpg
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    TextComponent ratio_2
      stopVal [duration (s)] = 120
      pos = (-0.65,0.7)
      text = 60:40
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    CodeComponent end_2
      Each Frame:
        if event.getKeys(keyList=['j', 'k']):
          trials_3.finished = True
          continueRoutine = False
    KeyboardComponent key_resp_4
      stopVal [duration (s)] = 120
      forceEndRoutine = True
      allowedKeys = 'j','k','space'
      startVal [time (s)] = 0
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  Routine trial_5
    ImageComponent current_bead_4
      stopVal [duration (s)] = 120
      startVal [time (s)] = 0.0
      image [set every repeat] = $SequenceName
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    TextComponent option_4
      stopVal [duration (s)] = 120
      pos = (0,0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Trykk blå tast for 60% blå
        Trykk gul tast for 60% gul
        Trykk SPACE for å se enda en kule
    ImageComponent image_4
      stopVal [duration (s)] = 120
      pos = (-0.8, 0.6)
      startVal [time (s)] = 0.0
      image = one_jar.jpg
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    TextComponent ratio_3
      stopVal [duration (s)] = 120
      pos = (-0.65,0.7)
      text = 60:40
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    CodeComponent end_3
      Each Frame:
        if event.getKeys(keyList=['j', 'k']):
          trials_4.finished = True
          continueRoutine = False
    KeyboardComponent key_resp_5
      stopVal [duration (s)] = 120
      forceEndRoutine = True
      allowedKeys = 'j','k','space'
      startVal [time (s)] = 0
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  Routine trial_2
    ImageComponent current_bead
      stopVal [duration (s)] = 120
      startVal [time (s)] = 0.0
      image [set every repeat] = $SequenceName
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    TextComponent option
      stopVal [duration (s)] = 120
      pos = (0,0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Trykk blå tast for 85% blå
        Trykk gul tast for 85% gul
        Trykk SPACE for å se enda en kule
    ImageComponent image
      stopVal [duration (s)] = 120
      pos = (-0.8, 0.6)
      startVal [time (s)] = 0.0
      image = one_jar.jpg
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    TextComponent text
      stopVal [duration (s)] = 120
      pos = (-0.65,0.7)
      text = 85:15
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    CodeComponent code
      Each Frame:
        if event.getKeys(keyList=['j', 'k']):
           trials.finished = True
           continueRoutine = False
    KeyboardComponent key_resp_3
      stopVal [duration (s)] = 120
      forceEndRoutine = True
      allowedKeys = 'j','k','space'
      startVal [time (s)] = 0
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  Routine trial_3
    ImageComponent current_bead_2
      stopVal [duration (s)] = 120
      startVal [time (s)] = 0.0
      image [set every repeat] = $SequenceName
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    TextComponent option_2
      stopVal [duration (s)] = 120
      pos = (0,0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Trykk blå tast for 85% blå
        Trykk gul tast for 85% gul
        Trykk SPACE for å se enda en kule
    ImageComponent image_2
      stopVal [duration (s)] = 120
      pos = (-0.8, 0.6)
      startVal [time (s)] = 0.0
      image = one_jar.jpg
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    TextComponent ratio
      stopVal [duration (s)] = 120
      pos = (-0.65,0.7)
      text = 85:15
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    CodeComponent end
      Each Frame:
        if event.getKeys(keyList=['j', 'k']):
          trials_2.finished = True
          continueRoutine = False
    KeyboardComponent key_resp_2
      stopVal [duration (s)] = 120
      forceEndRoutine = True
      allowedKeys = 'j','k','space'
      startVal [time (s)] = 0
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Flow
  Routine trial
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialdef_8515_seq1_small.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('SequenceName', u'seq1_8515_1.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_2.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_3.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_4.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_5.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_6.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_7.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_8.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_9.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_10.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_11.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_12.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_13.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_14.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_15.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_16.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_17.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_18.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_19.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_20.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_21.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_22.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_23.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_24.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_25.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_26.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_27.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_28.jpg')]),
      OrderedDict([('SequenceName', u'seq1_8515_29.jpg')])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
    Routine trial_2
  LoopTerminator trials
  Routine next
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = trialdef_8515_seq3_small.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('SequenceName', u'seq3_8515_1.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_2.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_3.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_4.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_5.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_6.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_7.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_8.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_9.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_10.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_11.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_12.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_13.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_14.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_15.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_16.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_17.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_18.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_19.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_20.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_21.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_22.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_23.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_24.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_25.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_26.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_27.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_28.jpg')]),
      OrderedDict([('SequenceName', u'seq3_8515_29.jpg')])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
    Routine trial_3
  LoopTerminator trials_2
  Routine next
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = trialdef_6040_seq1_small.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('SequenceName', u'seq1_6040_1.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_2.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_3.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_4.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_5.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_6.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_7.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_8.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_9.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_10.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_11.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_12.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_13.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_14.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_15.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_16.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_17.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_18.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_19.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_20.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_21.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_22.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_23.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_24.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_25.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_26.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_27.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_28.jpg')]),
      OrderedDict([('SequenceName', u'seq1_6040_29.jpg')])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
    Routine trial_4
  LoopTerminator trials_3
  Routine next
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = trialdef_6040_seq3_small.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('SequenceName', u'seq3_6040_1.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_2.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_3.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_4.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_5.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_6.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_7.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_8.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_9.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_10.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_11.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_12.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_13.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_14.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_15.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_16.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_17.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_18.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_19.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_20.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_21.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_22.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_23.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_24.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_25.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_26.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_27.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_28.jpg')]),
      OrderedDict([('SequenceName', u'seq3_6040_29.jpg')])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
    Routine trial_5
  LoopTerminator trials_4
  Routine end_of_task
