PsychoPy2experiment version="1.90.2"
Settings
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Save csv file = True
  expName = tone_task
  Screen = 1
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Routines
  Routine end
    TextComponent end_of_task
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Thank you
        End of task
  Routine fixation
    TextComponent text
      stopVal [duration (s)] = 60
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Get ready!
        Press SPACE to continue
    KeyboardComponent key_resp_7
      stopVal [duration (s)] = 60
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine trial
    ImageComponent image
      stopVal [duration (s)] = 120
      startVal [time (s)] = 0.0
      image = tone.jpg
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    TextComponent ratio
      text = 85:15
      stopVal [duration (s)] = 120
      pos = (-0.2,0)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    SoundComponent sound_1
      sound [set every repeat] = $tonefrequency
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
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    TextComponent options
      stopVal [duration (s)] = 120
      pos = (0,0.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Press blue for 85% high frequency tone
        Press yellow for 85% low frequency tone
        Press SPACE to hear another tone
    CodeComponent code
      Each Frame:
        if event.getKeys(keyList=['j', 'k']):
           trials.finished = True
           continueRoutine = False
    KeyboardComponent key_resp_2
      stopVal [duration (s)] = 120
      forceEndRoutine = True
      allowedKeys = 'j','k','space'
      startVal [time (s)] = 0.0
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  Routine tones
    SoundComponent low
      sound = 440
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
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    TextComponent text_2
      text = This is the low tone
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    SoundComponent high
      sound = 1000
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 3
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    TextComponent text_3
      text = This is the high tone
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 3
      letterHeight = 0.1
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  Routine trial_4
    ImageComponent image_4
      stopVal [duration (s)] = 120
      startVal [time (s)] = 0.0
      image = tone.jpg
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    TextComponent ratio_4
      text = 60:40
      stopVal [duration (s)] = 120
      pos = (-0.2,0)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    SoundComponent sound_4
      sound [set every repeat] = $tonefrequency
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
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    TextComponent options_4
      stopVal [duration (s)] = 120
      pos = (0,0.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Press blue for 60% high frequency tone
        Press yellow for 60% low frequency tone
        Press SPACE to hear another tone
    CodeComponent code_4
      Each Frame:
        if event.getKeys(keyList=['j', 'k']):
           trials_4.finished = True
           continueRoutine = False
    KeyboardComponent key_resp_5
      stopVal [duration (s)] = 120
      forceEndRoutine = True
      allowedKeys = 'j','k','space'
      startVal [time (s)] = 0
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  Routine trial_2
    ImageComponent image_2
      stopVal [duration (s)] = 120
      startVal [time (s)] = 0.0
      image = tone.jpg
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    TextComponent ratio_2
      text = 85:15
      stopVal [duration (s)] = 120
      pos = (-0.2,0)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    SoundComponent sound_2
      sound [set every repeat] = $tonefrequency
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
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    TextComponent options_2
      stopVal [duration (s)] = 120
      pos = (0,0.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Press blue for 85% high frequency tone
        Press yellow for 85% low frequency tone
        Press SPACE to hear another tone
    CodeComponent code_2
      Each Frame:
        if event.getKeys(keyList=['j', 'k']):
           trials_2.finished = True
           continueRoutine = False
    KeyboardComponent key_resp_3
      stopVal [duration (s)] = 120
      forceEndRoutine = True
      allowedKeys = 'k','j','space'
      startVal [time (s)] = 0.0
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  Routine trial_3
    ImageComponent image_3
      stopVal [duration (s)] = 120
      startVal [time (s)] = 0.0
      image = tone.jpg
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    TextComponent ratio_3
      text = 60:40
      stopVal [duration (s)] = 120
      pos = (-0.2,0)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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    SoundComponent sound_3
      sound [set every repeat] = $tonefrequency
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
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    TextComponent options_3
      stopVal [duration (s)] = 120
      pos = (0,0.4)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Press blue for 60% high frequency tone
        Press yellow for 60% low frequency tone
        Press SPACE to hear another tone
    CodeComponent code_3
      Each Frame:
        if event.getKeys(keyList=['j', 'k']):
           trials_3.finished = True
           continueRoutine = False
    KeyboardComponent key_resp_4
      stopVal [duration (s)] = 120
      forceEndRoutine = True
      allowedKeys = 'j','k','space'
      startVal [time (s)] = 0
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  Routine instructions
    TextComponent instruction
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        In this experiment, you will hear sequences of two different tones, one high-frequency and one low-frequency.
        The tones will occur in a given ratio. For example, 85% of the tones may be high and 15% low.
        The ratio will be displayed at the top left of the screen on each trial.
        Your task is to figure out whether the majority of the tones are high or low.
        For example, if the ratio is 85:15, you should try to figure out whether 85% of tones are high or low.

        You can request to hear as many tones as you need to make a decision by pressing SPACE.
        You can make a choice by pressing yellow for low or blue for high.

        Press SPACE to continue.
        You will then hear examples of the low and high tones.
        Good luck!
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine tones
  Routine fixation
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialdef_8515_audseq1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)])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
    Routine trial
  LoopTerminator trials
  Routine fixation
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = trialdef_8515_audseq2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)])]
    Routine trial_2
  LoopTerminator trials_2
  Routine fixation
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = trialdef_6040_audseq1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 440)])]
    Routine trial_3
  LoopTerminator trials_3
  Routine fixation
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = trialdef_6040_audseq2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 440)]),
      OrderedDict([('tonefrequency', 1000)]),
      OrderedDict([('tonefrequency', 440)])]
    Routine trial_4
  LoopTerminator trials_4
  Routine end
