PsychoPy2experiment version="1.90.2"
Settings
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Save csv file = True
  expName = box_task
  Screen = 1
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Routines
  Routine end_of_task
    TextComponent end_message
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Det var siste oppgave.
        Takk skal du ha!
  Routine trial
    TextComponent list_options
      stopVal [duration (s)] = 60.0
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Trykk blå tast for 85% blå
        Trykk gul tast for 85% gul
    PolygonComponent box_1
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_2
      pos = (-0.5,0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_3
      pos = (-0.25,0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_4
      pos = (0,0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_5
      pos = (0.25,0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_6
      pos = (0.5,0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_7
      pos = (-0.5,0)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_8
      pos = (-0.25,0)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_9
      pos = (0.25,0)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_10
      pos = (0.5,0)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_11
      pos = (-0.5,-0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_12
      pos = (-0.25,-0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_13
      pos = (0,-0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_14
      pos = (0.25,-0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_15
      pos = (0.5,-0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    TextComponent text
      stopVal [duration (s)] = 60.0
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Klikk på en rute for å avdekke den
        Ratio: 85:15
    MouseComponent mouse
      timeRelativeTo = routine
      stopVal [duration (s)] = 60.0
      forceEndRoutineOnPress = never
      startVal [time (s)] = 0.0
      saveMouseState = every frame
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    CodeComponent code
      Each Frame:
        if mouse.isPressedIn(box_1):
            box_1.fillColor = [-1,-1,1]
            box_1.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_2):
            box_2.fillColor = [-1,-1,1]
            box_2.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_3):
            box_3.fillColor = [-1,-1,1]
            box_3.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_4):
            box_4.fillColor = [1,1,-1]
            box_4.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_5):
            box_5.fillColor = [-1,-1,1]
            box_5.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_6):
            box_6.fillColor = [-1,-1,1]
            box_6.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_7):
            box_7.fillColor = [-1,-1,1]
            box_7.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_8):
            box_8.fillColor = [-1,-1,1]
            box_8.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_9):
            box_9.fillColor = [-1,-1,1]
            box_9.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_10):
            box_10.fillColor = [-1,-1,1]
            box_10.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_11):
            box_11.fillColor = [1,1,-1]
            box_11.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_12):
            box_12.fillColor = [-1,-1,1]
            box_12.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_13):
            box_13.fillColor = [-1,-1,1]
            box_13.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_14):
            box_14.fillColor = [-1,-1,1]
            box_14.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_15):
            box_15.fillColor = [1,1,-1]
            box_15.lineColor = [1,1,-1]
    CodeComponent code_2
      Each Frame:
        if event.getKeys(keyList=['j', 'k']):
           continueRoutine = False
    KeyboardComponent key_resp_2
      stopVal [duration (s)] = 60
      forceEndRoutine = True
      allowedKeys = 'j','k'
      startVal [time (s)] = 0.0
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  Routine trial_4
    TextComponent list_options_4
      stopVal [duration (s)] = 60.0
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Trykk blå tast for 60% blå
        Trykk gul tast for 60% gul
    PolygonComponent box_45
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_46
      pos = (-0.5,0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_47
      pos = (-0.25,0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_48
      pos = (0,0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_49
      pos = (0.25,0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_50
      pos = (0.5,0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_51
      pos = (-0.5,0)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_52
      pos = (-0.25,0)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_53
      pos = (0.25,0)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_54
      pos = (0.5,0)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_55
      pos = (-0.5,-0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_56
      pos = (-0.25,-0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_57
      pos = (0,-0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_58
      pos = (0.25,-0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_59
      pos = (0.5,-0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    TextComponent text_4
      stopVal [duration (s)] = 60.0
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Trykk på en rute for å avdekke den
        Ratio: 60:40
    MouseComponent mouse_4
      timeRelativeTo = routine
      stopVal [duration (s)] = 60.0
      forceEndRoutineOnPress = never
      startVal [time (s)] = 0.0
      saveMouseState = every frame
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    CodeComponent code_7
      Each Frame:
        if mouse.isPressedIn(box_45):
            box_45.fillColor = [1,1,-1]
            box_45.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_46):
            box_46.fillColor = [-1,-1,1]
            box_46.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_47):
            box_47.fillColor = [-1,-1,1]
            box_47.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_48):
            box_48.fillColor = [1,1,-1]
            box_48.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_49):
            box_49.fillColor = [-1,-1,1]
            box_49.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_50):
            box_50.fillColor = [-1,-1,1]
            box_50.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_51):
            box_51.fillColor = [1,1,-1]
            box_51.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_52):
            box_52.fillColor = [-1,-1,1]
            box_52.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_53):
            box_53.fillColor = [-1,-1,1]
            box_53.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_54):
            box_54.fillColor = [-1,-1,1]
            box_54.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_55):
            box_55.fillColor = [1,1,-1]
            box_55.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_56):
            box_56.fillColor = [-1,-1,1]
            box_56.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_57):
            box_57.fillColor = [-1,-1,1]
            box_57.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_58):
            box_58.fillColor = [-1,-1,1]
            box_58.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_59):
            box_59.fillColor = [1,1,-1]
            box_59.lineColor = [1,1,-1]
    CodeComponent code_8
      Each Frame:
        if event.getKeys(keyList=['j', 'k']):
           continueRoutine = False
    KeyboardComponent key_resp_5
      stopVal [duration (s)] = 60
      forceEndRoutine = True
      allowedKeys = 'j','k'
      startVal [time (s)] = 0.0
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  Routine trial_2
    TextComponent list_options_2
      stopVal [duration (s)] = 60.0
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Trykk blå tast for 85% blå
        Trykk gul tast for 85% gul
    PolygonComponent box
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_16
      pos = (-0.5,0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_17
      pos = (-0.25,0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_18
      pos = (0,0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_19
      pos = (0.25,0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_20
      pos = (0.5,0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_21
      pos = (-0.5,0)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_22
      pos = (-0.25,0)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_23
      pos = (0.25,0)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_24
      pos = (0.5,0)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_25
      pos = (-0.5,-0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_26
      pos = (-0.25,-0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_27
      pos = (0,-0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_28
      pos = (0.25,-0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_29
      pos = (0.5,-0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    TextComponent text_2
      stopVal [duration (s)] = 60.0
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Klikk på en rute for å avdekke den
        Ratio: 85:15
    MouseComponent mouse_2
      timeRelativeTo = routine
      stopVal [duration (s)] = 60.0
      forceEndRoutineOnPress = never
      startVal [time (s)] = 0.0
      saveMouseState = every frame
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    CodeComponent code_3
      Each Frame:
        if mouse.isPressedIn(box):
            box.fillColor = [1,1,-1]
            box.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_16):
            box_16.fillColor = [1,1,-1]
            box_16.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_17):
            box_17.fillColor = [1,1,-1]
            box_17.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_18):
            box_18.fillColor = [1,1,-1]
            box_18.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_19):
            box_19.fillColor = [1,1,-1]
            box_19.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_20):
            box_20.fillColor = [-1,-1,1]
            box_20.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_21):
            box_21.fillColor = [1,1,-1]
            box_21.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_22):
            box_22.fillColor = [1,1,-1]
            box_22.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_23):
            box_23.fillColor = [1,1,-1]
            box_23.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_24):
            box_24.fillColor = [-1,-1,1]
            box_24.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_25):
            box_25.fillColor = [1,1,-1]
            box_25.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_26):
            box_26.fillColor = [1,1,-1]
            box_26.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_27):
            box_27.fillColor = [-1,-1,1]
            box_27.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_28):
            box_28.fillColor = [1,1,-1]
            box_28.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_29):
            box_29.fillColor = [1,1,-1]
            box_29.lineColor = [1,1,-1]
    CodeComponent code_4
      Each Frame:
        if event.getKeys(keyList=['j', 'k']):
           continueRoutine = False
    KeyboardComponent key_resp_3
      stopVal [duration (s)] = 60
      forceEndRoutine = True
      allowedKeys = 'j','k'
      startVal [time (s)] = 0.0
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  Routine trial_3
    TextComponent list_options_3
      stopVal [duration (s)] = 60.0
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Trykk blå tast for 60% blå
        Trykk gul tast for 60% gul
    PolygonComponent box_30
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_31
      pos = (-0.5,0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_32
      pos = (-0.25,0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_33
      pos = (0,0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_34
      pos = (0.25,0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_35
      pos = (0.5,0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_36
      pos = (-0.5,0)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_37
      pos = (-0.25,0)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_38
      pos = (0.25,0)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_39
      pos = (0.5,0)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_40
      pos = (-0.5,-0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_41
      pos = (-0.25,-0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_42
      pos = (0,-0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_43
      pos = (0.25,-0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_44
      pos = (0.5,-0.25)
      shape = rectangle
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      stopVal [duration (s)] = 60.0
      lineColor = $[0.506,0.506,0.506]
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    TextComponent text_3
      stopVal [duration (s)] = 60.0
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.07
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      text:
        Trykk på en rute for å avdekke den
        Ratio: 60:40
    MouseComponent mouse_3
      timeRelativeTo = routine
      stopVal [duration (s)] = 60.0
      forceEndRoutineOnPress = never
      startVal [time (s)] = 0.0
      saveMouseState = every frame
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    CodeComponent code_5
      Each Frame:
        if mouse.isPressedIn(box_30):
            box_30.fillColor = [1,1,-1]
            box_30.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_31):
            box_31.fillColor = [-1,-1,1]
            box_31.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_32):
            box_32.fillColor = [1,1,-1]
            box_32.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_33):
            box_33.fillColor = [1,1,-1]
            box_33.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_34):
            box_34.fillColor = [-1,-1,1]
            box_34.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_35):
            box_35.fillColor = [1,1,-1]
            box_35.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_36):
            box_36.fillColor = [-1,-1,1]
            box_36.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_37):
            box_37.fillColor = [1,1,-1]
            box_37.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_38):
            box_38.fillColor = [-1,-1,1]
            box_38.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_39):
            box_39.fillColor = [1,1,-1]
            box_39.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_40):
            box_40.fillColor = [1,1,-1]
            box_40.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_41):
            box_41.fillColor = [-1,-1,1]
            box_41.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_42):
            box_42.fillColor = [-1,-1,1]
            box_42.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_43):
            box_43.fillColor = [1,1,-1]
            box_43.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_44):
            box_44.fillColor = [1,1,-1]
            box_44.lineColor = [1,1,-1]
    CodeComponent code_6
      Each Frame:
        if event.getKeys(keyList=['j', 'k']):
           continueRoutine = False
    KeyboardComponent key_resp_4
      stopVal [duration (s)] = 60
      forceEndRoutine = True
      allowedKeys = 'j','k'
      startVal [time (s)] = 0.0
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  Routine Instructions
    TextComponent text_5
      stopVal [duration (s)] = 120.0
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Når hver oppgave starter får du se flere grå ruter.
        Disse rutene skjuler en farge som kan avdekkes ved å venstre-klikke på rutene.
        Du får også vite en ratio. Denne forteller deg fordelingen av fargene samlet sett.

        For eksempel, hvis ratioen er 60:40, kan 60 % av rutene være blå og resten gul, og omvendt.
        Din oppgave er å finne ut hvilken farge flertallet av rutene har.

        Når du føler du har nok informasjon, da kan du velge ved å trykke på den gule tasten for gul eller den blå tasten for blå.
        Du kan avdekke så mange ruter som du ønsker før du bestemmer deg.

        Fordi ratioene kan skifte mellom oppgavene, må du huske å lese informasjonen på skjermen.

        For å starte, trykk SPACE.

        Lykke til!
    KeyboardComponent key_resp_6
      stopVal [duration (s)] = 120
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  Routine trial
  Routine trial_2
  Routine trial_3
  Routine trial_4
  Routine end_of_task
