PsychoPy2experiment version="1.90.2"
Settings
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Save csv file = True
  expName = irregbox_task_norm
  Screen = 1
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Routines
  Routine end_of_task
    TextComponent end_message
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        End of task
        Thank You!
  Routine trial
    TextComponent list_options
      stopVal [duration (s)] = 120
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Press blue for 85% blue
        Press yellow for 85% yellow
    PolygonComponent box_1
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_2
      pos = (0.2,0 )
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_3
      pos = (0.45,0.1)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_4
      pos = (0.8,0.7)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_5
      pos = (-0.6,0.5)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_6
      pos = (0.2,0.55)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_7
      pos = (-0.25,0.45)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_8
      pos = (0,-0.35)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_9
      pos = (0.25,-0.3)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_10
      pos = (-0.3,-0.75)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_11
      pos = (0.6,-0.6)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_12
      pos = (-0.2,-0.6)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_13
      pos = (-0.35,-0.3)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_14
      pos = (-0.6,-0.5)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_15
      pos = (-0.4,-0.1)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    TextComponent text
      stopVal [duration (s)] = 120
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Click on a bead to uncover it
        Ratio: 85:15
    MouseComponent mouse
      timeRelativeTo = routine
      stopVal [duration (s)] = 120
      forceEndRoutineOnPress = never
      startVal [time (s)] = 0.0
      saveMouseState = every frame
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    CodeComponent code
      Each Frame:
        if mouse.isPressedIn(box_1):
            box_1.fillColor = [-1,-1,1]
            box_1.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_2):
            box_2.fillColor = [-1,-1,1]
            box_2.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_3):
            box_3.fillColor = [-1,-1,1]
            box_3.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_4):
            box_4.fillColor = [1,1,-1]
            box_4.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_5):
            box_5.fillColor = [-1,-1,1]
            box_5.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_6):
            box_6.fillColor = [-1,-1,1]
            box_6.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_7):
            box_7.fillColor = [-1,-1,1]
            box_7.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_8):
            box_8.fillColor = [-1,-1,1]
            box_8.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_9):
            box_9.fillColor = [-1,-1,1]
            box_9.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_10):
            box_10.fillColor = [-1,-1,1]
            box_10.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_11):
            box_11.fillColor = [1,1,-1]
            box_11.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_12):
            box_12.fillColor = [-1,-1,1]
            box_12.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_13):
            box_13.fillColor = [-1,-1,1]
            box_13.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_14):
            box_14.fillColor = [-1,-1,1]
            box_14.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_15):
            box_15.fillColor = [1,1,-1]
            box_15.lineColor = [1,1,-1]
    CodeComponent code_2
      Each Frame:
        if event.getKeys(keyList=['j', 'k']):
           continueRoutine = False
    KeyboardComponent key_resp_2
      stopVal [duration (s)] = 120
      forceEndRoutine = True
      allowedKeys = 'j','k'
      startVal [time (s)] = 0.0
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  Routine trial_2irreg
    TextComponent list_options_5
      stopVal [duration (s)] = 120
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Press blue for 85% blue
        Press yellow for 85% yellow
    PolygonComponent box_60
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_61
      pos = (0.2,0 )
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_62
      pos = (0.45,0.1)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_63
      pos = (0.8,0.7)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_64
      pos = (-0.6,0.5)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_65
      pos = (0.2,0.55)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_66
      pos = (-0.25,0.45)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_67
      pos = (0,-0.35)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_68
      pos = (0.25,-0.3)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_69
      pos = (-0.3,-0.75)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_70
      pos = (0.6,-0.6)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_71
      pos = (-0.2,-0.6)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_72
      pos = (-0.35,-0.3)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_73
      pos = (-0.6,-0.5)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_74
      pos = (-0.4,-0.1)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    TextComponent text_6
      stopVal [duration (s)] = 120
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Click on a bead to uncover it
        Ratio: 85:15
    MouseComponent mouse_5
      timeRelativeTo = routine
      stopVal [duration (s)] = 120
      forceEndRoutineOnPress = never
      startVal [time (s)] = 0.0
      saveMouseState = every frame
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    CodeComponent code_9
      Each Frame:
        if mouse.isPressedIn(box_60):
            box_60.fillColor = [1,1,-1]
            box_60.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_61):
            box_61.fillColor = [1,1,-1]
            box_61.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_62):
            box_62.fillColor = [1,1,-1]
            box_62.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_63):
            box_63.fillColor = [1,1,-1]
            box_63.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_64):
            box_64.fillColor = [1,1,-1]
            box_64.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_65):
            box_65.fillColor = [-1,-1,1]
            box_65.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_66):
            box_66.fillColor = [1,1,-1]
            box_66.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_67):
            box_67.fillColor = [1,1,-1]
            box_67.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_68):
            box_68.fillColor = [1,1,-1]
            box_68.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_69):
            box_69.fillColor = [-1,-1,1]
            box_69.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_70):
            box_70.fillColor = [1,1,-1]
            box_70.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_71):
            box_71.fillColor = [1,1,-1]
            box_71.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_72):
            box_72.fillColor = [-1,-1,1]
            box_72.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_73):
            box_73.fillColor = [1,1,-1]
            box_73.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_74):
            box_74.fillColor = [1,1,-1]
            box_74.lineColor = [1,1,-1]
    CodeComponent code_10
      Each Frame:
        if event.getKeys(keyList=['j', 'k']):
           continueRoutine = False
    KeyboardComponent key_resp_7
      stopVal [duration (s)] = 120
      forceEndRoutine = True
      allowedKeys = 'j','k'
      startVal [time (s)] = 0.0
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  Routine trial_4irreg
    TextComponent list_options_7
      stopVal [duration (s)] = 120
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Press blue for 60% blue
        Press yellow for 60% yellow
    PolygonComponent box_90
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_91
      pos = (0.2,0 )
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_92
      pos = (0.45,0.1)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_93
      pos = (0.8,0.7)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_94
      pos = (-0.6,0.5)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_95
      pos = (0.2,0.55)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_96
      pos = (-0.25,0.45)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_97
      pos = (0,-0.35)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_98
      pos = (0.25,-0.3)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_99
      pos = (-0.3,-0.75)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_100
      pos = (0.6,-0.6)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_101
      pos = (-0.2,-0.6)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_102
      pos = (-0.35,-0.3)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_103
      pos = (-0.6,-0.5)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_104
      pos = (-0.4,-0.1)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    TextComponent text_8
      stopVal [duration (s)] = 120
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Click on a bead to uncover it
        Ratio: 60:40
    MouseComponent mouse_7
      timeRelativeTo = routine
      stopVal [duration (s)] = 120
      forceEndRoutineOnPress = never
      startVal [time (s)] = 0.0
      saveMouseState = every frame
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    CodeComponent code_13
      Each Frame:
        if mouse.isPressedIn(box_90):
            box_90.fillColor = [1,1,-1]
            box_90.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_91):
            box_91.fillColor = [-1,-1,1]
            box_91.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_92):
            box_92.fillColor = [-1,-1,1]
            box_92.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_93):
            box_93.fillColor = [1,1,-1]
            box_93.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_94):
            box_94.fillColor = [-1,-1,1]
            box_94.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_95):
            box_95.fillColor = [-1,-1,1]
            box_95.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_96):
            box_96.fillColor = [1,1,-1]
            box_96.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_97):
            box_97.fillColor = [-1,-1,1]
            box_97.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_98):
            box_98.fillColor = [-1,-1,1]
            box_98.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_99):
            box_99.fillColor = [-1,-1,1]
            box_99.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_100):
            box_100.fillColor = [1,1,-1]
            box_100.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_101):
            box_101.fillColor = [-1,-1,1]
            box_101.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_102):
            box_102.fillColor = [-1,-1,1]
            box_102.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_103):
            box_103.fillColor = [-1,-1,1]
            box_103.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_104):
            box_104.fillColor = [1,1,-1]
            box_104.lineColor = [1,1,-1]
    CodeComponent code_14
      Each Frame:
        if event.getKeys(keyList=['j', 'k']):
           continueRoutine = False
    KeyboardComponent key_resp_9
      stopVal [duration (s)] = 120
      forceEndRoutine = True
      allowedKeys = 'j','k'
      startVal [time (s)] = 0.0
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  Routine trial_3irreg
    TextComponent list_options_6
      stopVal [duration (s)] = 120
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Press blue for 60% blue
        Press yellow for 60% yellow
    PolygonComponent box_75
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_76
      pos = (0.2,0 )
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_77
      pos = (0.45,0.1)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_78
      pos = (0.8,0.7)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_79
      pos = (-0.6,0.5)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_80
      pos = (0.2,0.55)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_81
      pos = (-0.25,0.45)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_82
      pos = (0,-0.35)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_83
      pos = (0.25,-0.3)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_84
      pos = (-0.3,-0.75)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_85
      pos = (0.6,-0.6)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_86
      pos = (-0.2,-0.6)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_87
      pos = (-0.35,-0.3)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_88
      pos = (-0.6,-0.5)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    PolygonComponent box_89
      pos = (-0.4,-0.1)
      shape = regular polygon...
      startVal [time (s)] = 0.0
      size = (0.113,0.2)
      fillColor = $[0.506,0.506,0.506]
      nVertices = 100
      stopVal [duration (s)] = 120
      lineColor = $[0.506,0.506,0.506]
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    TextComponent text_7
      stopVal [duration (s)] = 120
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Click on a bead to uncover it
        Ratio: 60:40
    MouseComponent mouse_6
      timeRelativeTo = routine
      stopVal [duration (s)] = 120
      forceEndRoutineOnPress = never
      startVal [time (s)] = 0.0
      saveMouseState = every frame
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    CodeComponent code_11
      Each Frame:
        if mouse.isPressedIn(box_75):
            box_75.fillColor = [1,1,-1]
            box_75.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_76):
            box_76.fillColor = [-1,-1,1]
            box_76.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_77):
            box_77.fillColor = [1,1,-1]
            box_77.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_78):
            box_78.fillColor = [1,1,-1]
            box_78.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_79):
            box_79.fillColor = [-1,-1,1]
            box_79.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_80):
            box_80.fillColor = [1,1,-1]
            box_80.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_81):
            box_81.fillColor = [-1,-1,1]
            box_81.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_82):
            box_82.fillColor = [1,1,-1]
            box_82.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_83):
            box_83.fillColor = [-1,-1,1]
            box_83.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_84):
            box_84.fillColor = [1,1,-1]
            box_84.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_85):
            box_85.fillColor = [1,1,-1]
            box_85.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_86):
            box_86.fillColor = [-1,-1,1]
            box_86.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_87):
            box_87.fillColor = [-1,-1,1]
            box_87.lineColor = [-1,-1,1]
        elif mouse.isPressedIn(box_88):
            box_88.fillColor = [1,1,-1]
            box_88.lineColor = [1,1,-1]
        elif mouse.isPressedIn(box_89):
            box_89.fillColor = [1,1,-1]
            box_89.lineColor = [1,1,-1]
    CodeComponent code_12
      Each Frame:
        if event.getKeys(keyList=['j', 'k']):
           continueRoutine = False
    KeyboardComponent key_resp_8
      stopVal [duration (s)] = 120
      forceEndRoutine = True
      allowedKeys = 'j','k'
      startVal [time (s)] = 0.0
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  Routine Instructions
    TextComponent text_5
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        At the start of each trial, you will see a number of grey beads.
        These beads each hide a colour, which can be uncovered by left-clicking on the bead.
        You will also be given a ratio. This tells you the distribution of colours overall.

        For instance, if the ratio is 60:40, 60 % of the beads may be blue, the rest yellow or vice versa.
        Your task is to figure out the majority colour.

        Once you feel you have enough information, you can make a decision by pressing the yellow key for yellow or the blue key for blue.
        Feel free to uncover as many beads as you feel you need to make a decision.

        Remember to check the information on screen as colour ratios will change throughout the trial.

        Press SPACE to get started.

        Good luck!
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  Routine trial
  Routine trial_2irreg
  Routine trial_3irreg
  Routine trial_4irreg
  Routine end_of_task
