PsychoPy2experiment version="1.90.2"
Settings
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Experiment info = {u'participant': u'', u'sex': u''}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Save csv file = True
  Save log file = False
  expName = Cape-42
  logging level = data
  Screen = 1
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Routines
  Routine instrucs_CAPE
    TextComponent instrucsCAPE
      stopVal [duration (s)] = 15.0
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        Dette spørreskjemaet skapt for å måle særskilte følelser, forestillinger, og mentale opplevelser. Vi tror at disse er mye vanligere enn det som var tidligere antatt, og at de fleste mennesker har hatt slike opplevelser i løpet av sitt liv.
        Det er ingen svar som er rette eller gale. Det er dine oppriktige synspunkter og meninger vi er interesserte i. Tenk ikke for lenge på hvert spørsmål -
        er du i tvil, er ofte den første tanken det beste svaret.
        Svaralternativene er:
        Aldri (1),
        Iblant (2),
        Ofte (3),
        Nesten alltid (4).
        Trykk SPACE når du er klar for å begynne.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine takk
    TextComponent takking
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Da er du ferdig
        Takk for deltakelse
  Routine CAPE_P
    TextComponent CAPE42
      text [set every repeat] = $Survey_items
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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    RatingScaleComponent rating_2
      pos = 0, -0.4
      high = 4
      startVal [time (s)] = 0.0
      markerStart = 3
      size = 0.5
      forceEndRoutine = True
      low = 1
      scaleDescription = "Aldri" "ibland" "ofte" "nesten alltid"
      customize_everything = marker='triangle', size=0.5, pos=[0.0, -0.4], low=1, high=4, labels=['aldri','iblant','ofte','nesten alltid'], scale = '1 = Aldri, 2 = Iblant, 3 = Ofte, 4 = Nesten alltid', markerStart='3',stretch = 2.5
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Flow
  Routine instrucs_CAPE
  LoopInitiator CAPE_p loopType="TrialHandler"
    conditionsFile = CAPE42.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Survey_items': u'F\xf8ler du deg noen gang trist?', 'answer_option': u'1; 2; 3; 4'},
      {'Survey_items': u'Har du noen gang f\xf8lelsen av at folk kommer med hint om deg, eller sier ting med dobbel betydning?', 'answer_option': u'1; 2; 3; 4'},
      {'Survey_items': u'Har du noen gang f\xf8lelsen av at du ikke er en spesielt livlig person?', 'answer_option': u'1; 2; 3; 4'},
      {'Survey_items': u'Har du noen gang f\xf8lelsen av at du ikke er s\xe6rlig god til \xe5 snakke for deg n\xe5r du er i en samtale med andre mennesker?', 'answer_option': u'1; 2; 3; 4'},
      {'Survey_items': u'Har du noen gang f\xf8lelsen av at noe i et blad eller p\xe5 TV er beregnet spesielt p\xe5 deg?', 'answer_option': u'1; 2; 3; 4'},
      {'Survey_items': u'Har du noen gang f\xf8lelsen av at enkelte personer er noe annet enn de gir seg ut for?', 'answer_option': u'1; 2; 3; 4'},
      {'Survey_items': u'F\xf8ler du deg noen gang forfulgt p\xe5 en eller annen m\xe5te?', 'answer_option': u'1; 2; 3; 4'},
      {'Survey_items': u'Har du noen gang hatt f\xf8lelsen av at du har svake eller ingen f\xf8lelsesmessige reaksjoner n\xe5r noe...', 'answer_option': u'1; 2; 3; 4'},
      {'Survey_items': u'F\xf8ler du deg noen gang pessimistisk n\xe5r det gjelder absolutt alt?', 'answer_option': u'1; 2; 3; 4'},
      {'Survey_items': u'Har du noen gang f\xf8lelsen av at en konspirasjon er rettet mot deg?', 'answer_option': u'1; 2; 3; 4'},
      {'Survey_items': u'Hender det at du ser bittesm\xe5 gjenstander eller fenomener, for eksempel hvite mus?', 'answer_option': u'1; 2; 3; 4'}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
    Routine CAPE_P
  LoopTerminator CAPE_p
  Routine takk
