PsychoPy2experiment version="1.90.2"
Settings
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Experiment info = {u'participant': u'', u'sex': u''}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1920, 1080]
  Full-screen window = True
  Save csv file = True
  Save log file = False
  expName = Cape-42_english
  logging level = data
  Screen = 1
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Routines
  Routine instrucs_CAPE
    TextComponent instrucsCAPE
      startVal [time (s)] = 0.0
      letterHeight = 0.05
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      text:
        This questionnaire is designed to measure unusual emotions, ideas, and mental experiences. We believe that these are much more common than previously thought and that most people have had such experiences at some point in their lives.
        There are no right or wrong answers. It is your honest views and opinions we are interested in. Do not deliberate too long before answering each question – if in doubt the first instinct is often the best answer.
        The answer key is as follows:
        Never (1)
        Sometimes (2)
        Often (3)
        Almost always (4)
        Press SPACE when you are ready to begin.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine takk
    TextComponent takking
      stopVal [duration (s)] = 3.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You have finished all questions.
        Thanks for taking part!
  Routine CAPE_P
    TextComponent CAPE42
      text [set every repeat] = $Survey_items
      startVal [time (s)] = 0.0
      letterHeight = 0.04
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    RatingScaleComponent rating_2
      pos = 0, -0.4
      high = 4
      startVal [time (s)] = 0.0
      markerStart = 3
      size = 0.5
      forceEndRoutine = True
      low = 1
      scaleDescription = "Never" "Sometimes" "Often" "Nearly always"
      customize_everything = marker='triangle', size=0.5, pos=[0.0, -0.4], low=1, high=4, labels=['aldri','iblant','ofte','nesten alltid'], scale = '1 = Never, 2 = Sometimes, 3 = Often, 4 = Almost always', markerStart='3',stretch = 2.5
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Flow
  Routine instrucs_CAPE
  LoopInitiator CAPE_p loopType="TrialHandler"
    conditionsFile = CAPE42English.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Survey_items': u'Do you ever feel sad?', 'answer_option': u'1; 2; 3; 4'},
      {'Survey_items': u'Do you ever feel as if people seem to drop hints about you or say things with a double meaning?', 'answer_option': u'1; 2; 3; 4'},
      {'Survey_items': u'Do you ever feel that you are not a very animated person?', 'answer_option': u'1; 2; 3; 4'},
      {'Survey_items': u'Do you ever feel that you are not much of a talker when you are conversing with other people?', 'answer_option': u'1; 2; 3; 4'},
      {'Survey_items': u'Do you ever feel as if things in magazines or on TV were written especially for you?', 'answer_option': u'1; 2; 3; 4'},
      {'Survey_items': u'Do you ever feel as if some people are not what they seem to be?', 'answer_option': u'1; 2; 3; 4'},
      {'Survey_items': u'Do you ever feel as if you are being persecuted in some way?', 'answer_option': u'1; 2; 3; 4'},
      {'Survey_items': u'Do you ever feel that you experience few or no emotions at important events?', 'answer_option': u'1; 2; 3; 4'},
      {'Survey_items': u'Do you ever feel pessimistic about everything?', 'answer_option': u'1; 2; 3; 4'},
      {'Survey_items': u'Do you ever feel as if there is a conspiracy against you?', 'answer_option': u'1; 2; 3; 4'},
      {'Survey_items': u'Do you ever see tiny items, such as white mice?', 'answer_option': u'1; 2; 3; 4'},
      {'Survey_items': u'Do you ever feel as if you are destined to be someone very important?', 'answer_option': u'1; 2; 3; 4'}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
    Routine CAPE_P
  LoopTerminator CAPE_p
  Routine takk
