PsychoPy2experiment version="3.0.7"
Settings
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = AmbiguityE
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Routines
  Routine b'example_2'
    ImageComponent example_1
      image = risky_red_p13_urns.jpg
      startVal [time (s)] = 0
      stopVal [time (s)] = 22
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    TextComponent instruct_ex
      letterHeight = 0.05
      startVal [time (s)] = 22
      stopVal [duration (s)] = 5.0
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      text:
        If you have chosen '1' you played the 50% 5 NOK lottery
        If you have chosen '2' you played the 13% 18 NOK lottery
    TextComponent text_2
      letterHeight = 0.07
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 22
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      text:
        1 = 50/50 lottery
        2 = lottery on screen
    KeyboardComponent key_resp_ex
      allowedKeys = '1','2'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 22
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    TextComponent text_3
      letterHeight = 0.05
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 22
      text = 0
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    TextComponent text_4
      letterHeight = 0.05
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 22
      text = 18
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  Routine break2
    TextComponent breakt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Take a break if you wish.

        Press SPACE when you are ready to continue.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine urns
    ImageComponent image
      image [set every repeat] = $urn_selection
      startVal [time (s)] = 0
      stopVal [duration (s)] = 22
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    TextComponent instruct_reminder
      letterHeight = 0.07
      pos = (0.5, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 22
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      text:
        1 = 50/50 lottery
        2 = lottery on screen
    TextComponent value
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = .05
      pos [set every repeat] = $(Pos1X, Pos1Y)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text [set every repeat] = $reward1
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    TextComponent value_2
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.05
      pos [set every repeat] = $(Pos2X, Pos2Y)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $reward2
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = '1', '2'
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 10
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  Routine intro2
    TextComponent instructions
      letterHeight = .05
      startVal [time (s)] = 0
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      text:
        In this task, you will have to choose to play one of two lotteries. If you choose to play the first lottery (option 1), you will always have a 50% chance of winning 5 kr. If you choose to play the second lottery (option 2), the probability of winning will change, as will the amount of money you can win.

        On each trial, you will see a bar that is partly red and partly blue. This bar represents a lottery jar filled with red and blue beads. The ratio of red to blue indicates the proportions of red and blue beads in the jar. You will also see two numbers next to the red and blue portions of the bar: one of them will be 0, the other a non-zero integer. These numbers indicate the potential winnings for beads of each colour.

        On some trials, the grey line dividing red and blue in the jar will be thicker, hiding the exact proportions of red and blue. This does not affect the way the task works – you should still choose whether you want to play option 1 or option 2.

        It is important to note that you will not be presented with a visual representation of option 1. This is because both the probability of winning and the amount that can be won are constant for this option.

        You can choose which lottery you want to play by pressing 1 for option 1 or 2 for option 2.
        By performing well in this task, you can increase your overall reward by up to 30 kr.

        When you are ready to continue, press SPACE.
        You will then complete a trial run.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine get_ready_main
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        You are about to start the main task.

        On three unknown trials you have the chance of winning actual money that will be added to your participation reward.

        Press SPACE when you are ready to continue.

        Good luck!
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine beadscount1_3
    ImageComponent matrix1
      image [set every repeat] = $beadmatrix
      size = (380, 380)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_6
      allowedKeys = 'b', 'r'
      correctAns = $correct
      forceEndRoutine = True
      startVal [time (s)] = 2.0
      storeCorrect = True
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    TextComponent text_7
      color [set every repeat] = white
      font [set every repeat] = Arial
      letterHeight [set every repeat] = 0.05
      pos [set every repeat] = (0, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text [set every repeat]:
        What is the majority color?
        Press b for blue
        Press r for red
  Routine intro_count
    TextComponent text_count
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will now see a matrix with 100 beads
        There are either more blue or more red beads.

        Please indicate which color is the majority

        Press b for blue
        Press r for red

        You are also asked to make a confidence judgement

        Ready?
        Press SPACE to start
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine conf
    RatingScaleComponent rating_2
      forceEndRoutine = True
      high = 10
      labels = absolutely sure red, 0, absolutely sure blue
      low = -10
      pos = 0, -0.4
      showAccept = False
      size = 1.0
      startVal [time (s)] = 0.0
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    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = How sure are you?
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  Routine end
    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        Thank you for particpating

        please wait until all are done

        Thank you
  Routine urn_demo
    ImageComponent lotteries
      image = lotteries
      size = (1000, 560)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent key_resp_8
      allowedKeys = '1', '2', 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine intro2
  Routine urn_demo
  Routine get_ready_main
  LoopInitiator urntrials loopType="TrialHandler"
    conditionsFile = urn_trials.xlsx
    loopType = random
    nReps = 1
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    Routine urns
  LoopTerminator urntrials
  Routine break2
  LoopInitiator urntrials2 loopType="TrialHandler"
    conditionsFile = urn_trials.xlsx
    loopType = random
    nReps = 1
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    Routine urns
  LoopTerminator urntrials2
  Routine intro_count
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = countingbeads.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('beadmatrix', 'matrix47r53b.png'), ('correct', 'b')]),
      OrderedDict([('beadmatrix', 'matrix47r53b_v2.png'), ('correct', 'b')]),
      OrderedDict([('beadmatrix', 'matrix49r51b.png'), ('correct', 'b')]),
      OrderedDict([('beadmatrix', 'matrix49r51b_v2.png'), ('correct', 'b')]),
      OrderedDict([('beadmatrix', 'matrix49r51b_v3.png'), ('correct', 'b')]),
      OrderedDict([('beadmatrix', 'matrix51r49b.png'), ('correct', 'r')]),
      OrderedDict([('beadmatrix', 'matrix51r49b_v2.png'), ('correct', 'r')]),
      OrderedDict([('beadmatrix', 'matrix52r48b.png'), ('correct', 'r')]),
      OrderedDict([('beadmatrix', 'matrix52r48b_v2.png'), ('correct', 'r')]),
      OrderedDict([('beadmatrix', 'matrix52r48b_v3.png'), ('correct', 'r')])]
    Routine beadscount1_3
    Routine conf
  LoopTerminator trials
  Routine end
