PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {u'session': u'001', u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  color = $[-1,-1,-1]
  expName = beads_task_DtD_norm_NO_wb1
  keyboardBackend = ioHub
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Routines
  Routine end_of_task
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Takk skal du ha!
        Oppgaven er over.
  Routine next
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Gjør det klar!
        Trykk SPACE for å fortsette
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
    TextComponent instructions_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Du vil få presentert to krukker med gule og blå kuler.
        Du får vite fordelingen mellom blå og gule kuler i hver krukke.
        Kulene trekkes tilfeldig fra en av krukkene, og erstattes deretter av en ny kule.
        Det vil si at det hele tiden er like mange kuler i krukken, og at forholdet mellom fargene ikke forandrer seg.

        Oppgaven din er å finne ut hvilken krukke kulene trekkes fra.
        Du kan be om å få se så mange kuler som du ønsker ved å trykke på SPACE-knappen.
        Kun når du føler at du har samlet nok informasjon skal du bestemme deg.
        Du kan velge ved å trykke på den gule tasten for krukken med flest gule kuler og på den blå tasten for krukken med mest blå kuler.

        Fordelingen mellom fargene bytter mellom hver oppgave, så det er viktig at du leser all informasjonen på skjermen for hver oppgave.

        Når du er klar, trykk SPACE for å starte.

        Lykke til!
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial_4
    ImageComponent current_bead_4
      image [set every repeat] = $SequenceName
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    TextComponent option_4
      letterHeight = 0.07
      pos = (0,0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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      text:
        Trykk blå tast for 60% blå
        Trykk gul tast for 60% gul
        Trykk SPACE for å se enda en kule
    ImageComponent image_4
      image = jars_6040.jpg
      pos = (-0.8, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    TextComponent ratio_3
      letterHeight = 0.07
      pos = (-0.58,0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text = 60:40
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    CodeComponent end_3
      Code Type = Auto->JS
      Each Frame:
        if event.getKeys(keyList=['j', 'k']):
          trials_4.finished = True
          continueRoutine = False
    KeyboardComponent b_key_resp_6_
      allowedKeys = 'j','k','space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
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  Routine trial_5
    ImageComponent current_bead_5
      image [set every repeat] = $SequenceName
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    TextComponent option_5
      letterHeight = 0.07
      pos = (0.1,0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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      text:
        Trykk 1 tast for 85:15
        Trykk 2 tast for 50:50
        Trykk SPACE for å se enda en kule
    ImageComponent image_5
      image = jars_50508020b.jpg
      pos = (-0.8, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    TextComponent ratio_4
      letterHeight = 0.07
      pos = (-0.45,0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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      text:
        venstre krukke: 85:15
        høyre krukke: 50:50
    CodeComponent end_4
      Code Type = Auto->JS
      Each Frame:
        if event.getKeys(keyList=['1', '2']):
          trials_5.finished = True
          continueRoutine = False
    KeyboardComponent b_key_resp_8_
      allowedKeys = '1','2','space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
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  Routine trial_2
    ImageComponent current_bead_2
      image [set every repeat] = $SequenceName
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    TextComponent option_2
      letterHeight = 0.07
      pos = (0,0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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      text:
        Trykk blå tast for 85% blå
        Trykk gul tast for 85% gul
        Trykk SPACE for å se enda en kule
    ImageComponent image_2
      image = jars.jpg
      pos = (-0.8, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    TextComponent ratio
      letterHeight = 0.07
      pos = (-0.58,0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text = 85:15
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    CodeComponent end
      Code Type = Auto->JS
      Each Frame:
        if event.getKeys(keyList=['j', 'k']):
          trials_2.finished = True
          continueRoutine = False
    KeyboardComponent b_key_resp_4_
      allowedKeys = 'j','k','space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
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  Routine trial_3
    ImageComponent current_bead_3
      image [set every repeat] = $SequenceName
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    TextComponent option_3
      letterHeight = 0.07
      pos = (0,0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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      text:
        Trykk blå tast for 60% blå
        Trykk gul tast for 60% gul
        Trykk SPACE for å se enda en kule
    ImageComponent image_3
      image = jars_6040.jpg
      pos = (-0.8, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    TextComponent ratio_2
      letterHeight = 0.07
      pos = (-0.58,0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text = 60:40
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    CodeComponent end_2
      Code Type = Auto->JS
      Each Frame:
        if event.getKeys(keyList=['j', 'k']):
          trials_3.finished = True
          continueRoutine = False
    KeyboardComponent b_key_resp_5_
      allowedKeys = 'j','k','space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
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  Routine trial_1
    ImageComponent current_bead
      image [set every repeat] = $SequenceName
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    TextComponent option
      letterHeight = 0.07
      pos = (0,0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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      text:
        Trykk '1' tast for 85% blå
        Trykk '2' tast for 85% gul
        Trykk SPACE for å se enda en kule
    ImageComponent image
      image = jars.jpg
      pos = (-0.8, 0.6)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    TextComponent b_text_3_
      letterHeight = 0.07
      pos = (-0.58,0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
      text = 85:15
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    CodeComponent code
      Code Type = Auto->JS
      Each Frame:
        if event.getKeys(keyList=['j', 'k']):
           trials.finished = True
           continueRoutine = False
    KeyboardComponent key_resp_3
      allowedKeys = 'j','k','space'
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 120
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialdef_8515_seq1_small.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('SequenceName', 'seq1_8515_1.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_2.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_3.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_4.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_5.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_6.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_7.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_8.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_9.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_10.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_11.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_12.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_13.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_14.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_15.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_16.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_17.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_18.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_19.jpg')]),
      OrderedDict([('SequenceName', 'seq1_8515_20.jpg')])]
    Routine trial_1
  LoopTerminator trials
  Routine next
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = trialdef_8515_seq3_small.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('SequenceName', 'seq3_8515_1.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_2.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_3.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_4.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_5.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_6.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_7.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_8.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_9.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_10.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_11.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_12.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_13.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_14.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_15.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_16.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_17.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_18.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_19.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_20.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_21.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_22.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_23.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_24.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_25.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_26.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_27.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_28.jpg')]),
      OrderedDict([('SequenceName', 'seq3_8515_29.jpg')])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
    Routine trial_2
  LoopTerminator trials_2
  Routine next
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = trialdef_6040_seq1_small.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('SequenceName', 'seq1_6040_1.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_2.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_3.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_4.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_5.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_6.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_7.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_8.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_9.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_10.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_11.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_12.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_13.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_14.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_15.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_16.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_17.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_18.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_19.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_20.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_21.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_22.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_23.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_24.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_25.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_26.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_27.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_28.jpg')]),
      OrderedDict([('SequenceName', 'seq1_6040_29.jpg')])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
    Routine trial_3
  LoopTerminator trials_3
  Routine next
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = trialdef_6040_seq3_small.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('SequenceName', 'seq3_6040_1.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_2.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_3.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_4.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_5.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_6.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_7.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_8.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_9.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_10.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_11.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_12.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_13.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_14.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_15.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_16.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_17.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_18.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_19.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_20.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_21.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_22.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_23.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_24.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_25.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_26.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_27.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_28.jpg')]),
      OrderedDict([('SequenceName', 'seq3_6040_29.jpg')])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
    Routine trial_4
  LoopTerminator trials_4
  Routine next
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = trialdef_8515_seq4_small.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('SequenceName', 'seq4_8515_1.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_2.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_3.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_4.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_5.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_6.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_7.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_8.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_9.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_10.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_11.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_12.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_13.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_14.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_15.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_16.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_17.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_18.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_19.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_20.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_21.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_22.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_23.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_24.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_25.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_26.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_27.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_28.jpg')]),
      OrderedDict([('SequenceName', 'seq4_8515_29.jpg')])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
    Routine trial_5
  LoopTerminator trials_5
  Routine end_of_task
